<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>384</cv:X>
            <cv:Y>264</cv:Y>
            <cv:Width>532</cv:Width>
            <cv:Height>436</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TimeSpan" DisplayName="TrialDuration" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count xsi:nil="true" />
          <rx:TimeSpan>PT30S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Users\kepecs\Documents\Data\Quentin\Bonsai\BLA-ACh-03\BLA-ACh-03_CuedOutcome_Aug09_2021_Session1\BLA-ACh-03_20210809_.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>20</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="10" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="10" Label="Source2" />
      <Edge From="8" To="11" Label="Source2" />
      <Edge From="9" To="10" Label="Source3" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>